PsychoPy2experiment version="2020.1.3"
Settings
  Experiment info = {'participant': ''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1504, 1003]
  color = $[1,1,1]
  expName = ANT
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Routines
  Routine instr
    TextComponent instr_1
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0
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      text:
        This is a task investigating attention.

        You will be shown an arrow on the screen pointing to either the
        left or the right.

        On some trials, the arrow will be flanked by
        two arrows to the left or two arrows to the
        right. They may or may not point in the same direction as the
        CENTER arrow.








        Your task is to respond to the direction of the CENTER arrow.



        Press the SPACEBAR to continue.
    KeyboardComponent key_resp
      allowedKeys = "space"
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image
      image = ANT_images/image1.png
      pos = (0, -.1)
      size = (0.5, 0.12)
      startVal [time (s)] = 0.0
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  Routine instr2
    TextComponent instr_2
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        left: 'E' key                                            right: 'I' key

        Press the left response button ('E') if the CENTER arrow
        points to the left.





        Press the right reponse arrow ('I') if the CENTER arrow
        points to the right.





        Please make your reponse as quickly and accurately as
        possible. Your reaction time and accuracy will be recorded.



        Press the SPACEBAR to continue.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_2_1
      image = ANT_images/image2.1.png
      pos = (0, .14)
      size = (0.5, 0.12)
      startVal [time (s)] = 0.0
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    ImageComponent image_2_2
      image = ANT_images/image2.2.png
      pos = (0, -.1)
      size = (0.5, 0.12)
      startVal [time (s)] = 0.0
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  Routine instr3
    TextComponent text
      color = black
      letterHeight = 0.03
      pos = (0, .3)
      startVal [time (s)] = 0.0
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      text:
        There will be a cross in the center of the screen
        and the arrows will appear either above or below the cross.

        You should try to fixate on the cross throughout the task.



        Press the SPACEBAR to continue.
    KeyboardComponent key_resp_3
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_3
      image = ANT_images/image3.png
      pos = (0, -.07)
      size = (0.7, 0.3)
      startVal [time (s)] = 0.0
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  Routine instr4
    TextComponent instr_4
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Additionally, on some trials there will be a black star
        flashed onto the screen shortly before the arrows appear.

        These stars indicate where the arrow will occur:









        If the star is at the center or both above and below fixation
        it indicates both that the trial will occur shortly and WHERE
        it will occur.

        Try to maintain fixation at all times. However, you may attend
        when and where indicated by the cues.



        Press the SPACEBAR to continue.
    KeyboardComponent key_resp_4
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    ImageComponent image_4
      image = ANT_images/image4.png
      pos = (0, .1)
      size = (0.6, 0.15)
      startVal [time (s)] = 0.0
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  Routine practice_instr
    TextComponent pract_instr
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        This task contains four blocks:

        The first block is for practice only and takes about two minutes. After each
        block there will be a message 'take a break' and you may take a short rest.

        The whole session takes about twenty minutes.



        Press the SPACEBAR to start PRACTICE
    KeyboardComponent key_resp_5
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine break_2
    TextComponent break_message
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have reached the end of this trial. You may take a short break before continuing.

        Please press the SPACEBAR when you are ready to proceed.
    KeyboardComponent break_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      store = nothing
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  Routine end
    TextComponent text_2
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        You have completed the test.

        Thank you for participating.

        Press the SPACEBAR to save your data and finish.
    KeyboardComponent end_key
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial_instr
    TextComponent practice_res
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        You have completed the practice trials.



          Press SPACEBAR to continue.
    KeyboardComponent key_resp_6
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine feedback
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Experiment:
        msg = "error"
      Begin Routine:
        if
  Routine trial
    ImageComponent fixation_1
      image [set every repeat] = ANT_images/fixation.png
      size = (1, 1)
      startVal [time (s)] = 0
      stopVal [duration (s)] = $fix1
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    ImageComponent warning
      image [set every repeat] = $cue_file
      size = (1, 1)
      startVal [time (s)] = $fix1
      stopVal [duration (s)] = $cue_time
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    ImageComponent fixation_2
      image = ANT_images/fixation.png
      size = (1, 1)
      startVal [condition] = $warning.status==FINISHED
      stopVal [duration (s)] = .4
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    ImageComponent target
      image [set every repeat] = $flanker
      pos [set every repeat] = (0, pos)
      size = (0.7, 0.3)
      startVal [condition] = $fixation_2.status==FINISHED
      stopVal [duration (s)] = 1.7
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    KeyboardComponent response
      allowedKeys = 'e', 'i'
      correctAns = $correct
      forceEndRoutine = True
      startVal [condition] = $stimStart
      stopVal [duration (s)] = 1.7
      store = first key
      storeCorrect = True
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    ImageComponent post_fixation
      disabled = True
      image = ANT_images/fixation.png
      size = (1, 1)
      startVal [condition] = $target.status==FINISHED
      stopVal [duration (s)] = $postFix-$response.rt
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  Routine pract_trial
    ImageComponent fix_1
      image [set every repeat] = ANT_images/fixation.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix1
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    ImageComponent pract_warning
      image [set every repeat] = $cue_file
      size = (1, 1)
      startVal [time (s)] = $fix1
      stopVal [duration (s)] = $cue_time
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    ImageComponent fix_2
      image [set every repeat] = ANT_images/fixation.png
      size = (1, 1)
      startVal [condition] = $pract_warning.status==FINISHED
      stopVal [duration (s)] = 0.4
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    ImageComponent pract_target
      image [set every repeat] = $flanker
      pos [set every repeat] = (0, pos)
      size = (0.7, 0.3)
      startVal [condition] = $fix_2.status==FINISHED
      stopVal [duration (s)] = 1.7
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    KeyboardComponent pract_resp
      allowedKeys = 'e', 'i'
      correctAns = $correct
      forceEndRoutine = True
      startVal [time (s)] = $stimStart
      stopVal [duration (s)] = 1.7
      store = first key
      storeCorrect = True
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  Routine feedback_2
    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Experiment:
        msg = ""
      Begin Routine:
        if not pract_resp.keys:
            msg="No response"
        elif pract_resp.corr:
            msg="Correct!"
        else:
            msg="Incorrect"
    TextComponent text_3
      color [set every repeat] = black
      letterHeight = 0.1
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.4
      text [set every repeat] = $msg
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  Routine Check
    TextComponent text_4
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Hey
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  Routine MainTrialInstruct
    TextComponent text_5
      color = black
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Now the actual task can be started.

        There will be three blocks. Each block takes about
        five minutes. Totally, you just need to spend 15 minutes.



           Press the SPACEBAR to start the task
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine post_fixation_2
    ImageComponent postfix
      image = ANT_images/fixation.png
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $postFix
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Flow
  Routine instr
  Routine instr2
  Routine instr3
  Routine instr4
  Routine practice_instr
  LoopInitiator practice loopType="TrialHandler"
    conditionsFile = ANT_practice.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/cong_l.png'), ('pos', -0.25), ('correct', 'e'), ('fix1', 0.1), ('cue_time', 0.0)]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/incong_r.png'), ('pos', 0.25), ('correct', 'i'), ('fix1', 0.1), ('cue_time', 0.0)]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/cong_l.png'), ('pos', 0.25), ('correct', 'e'), ('fix1', 0.1), ('cue_time', 0.0)]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/cong_r.png'), ('pos', -0.25), ('correct', 'i'), ('fix1', 0.1), ('cue_time', 0.0)]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/cong_r.png'), ('pos', 0.25), ('correct', 'i'), ('fix1', 0.1), ('cue_time', 0.0)]),
      OrderedDict([('cue_file', 'ANT_images/center.png'), ('flanker', 'ANT_images/neu_l.png'), ('pos', -0.25), ('correct', 'e'), ('fix1', 0.8), ('cue_time', 0.1)]),
      OrderedDict([('cue_file', 'ANT_images/center.png'), ('flanker', 'ANT_images/neu_r.png'), ('pos', 0.25), ('correct', 'i'), ('fix1', 1.0), ('cue_time', 0.1)]),
      OrderedDict([('cue_file', 'ANT_images/center.png'), ('flanker', 'ANT_images/neu_l.png'), ('pos', 0.25), ('correct', 'e'), ('fix1', 1.1), ('cue_time', 0.1)]),
      OrderedDict([('cue_file', 'ANT_images/center.png'), ('flanker', 'ANT_images/cong_r.png'), ('pos', 0.25), ('correct', 'i'), ('fix1', 1.4), ('cue_time', 0.1)])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
    Routine pract_trial
    Routine feedback_2
  LoopTerminator practice
  Routine trial_instr
  Routine MainTrialInstruct
  LoopInitiator trials_2 loopType="TrialHandler"
    loopType = sequential
    nReps = 2
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = ANT_conditions.xlsx
      loopType = random
      nReps = 2
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      conditions:
        [OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/neu_l.png'), ('pos', 0.3), ('correct', 'e')]),
        OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/neu_r.png'), ('pos', 0.3), ('correct', 'i')]),
        OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/cong_l.png'), ('pos', 0.3), ('correct', 'e')]),
        OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/cong_r.png'), ('pos', 0.3), ('correct', 'i')]),
        OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/incong_l.png'), ('pos', 0.3), ('correct', 'e')]),
        OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/incong_r.png'), ('pos', 0.3), ('correct', 'i')]),
        OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/neu_l.png'), ('pos', -0.3), ('correct', 'e')]),
        OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/neu_r.png'), ('pos', -0.3), ('correct', 'i')]),
        OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/cong_l.png'), ('pos', -0.3), ('correct', 'e')]),
        OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/cong_r.png'), ('pos', -0.3), ('correct', 'i')]),
        OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/incong_l.png'), ('pos', -0.3), ('correct', 'e')]),
        OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/incong_r.png'), ('pos', -0.3), ('correct', 'i')])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
      Routine trial
      Routine post_fixation_2
    LoopTerminator trials
    Routine break_2
  LoopTerminator trials_2
  LoopInitiator trials_3 loopType="TrialHandler"
    conditionsFile = ANT_conditions.xlsx
    loopType = random
    nReps = 2
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    conditions:
      [OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/neu_l.png'), ('pos', 0.3), ('correct', 'e')]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/neu_r.png'), ('pos', 0.3), ('correct', 'i')]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/cong_l.png'), ('pos', 0.3), ('correct', 'e')]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/cong_r.png'), ('pos', 0.3), ('correct', 'i')]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/incong_l.png'), ('pos', 0.3), ('correct', 'e')]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/incong_r.png'), ('pos', 0.3), ('correct', 'i')]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/neu_l.png'), ('pos', -0.3), ('correct', 'e')]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/neu_r.png'), ('pos', -0.3), ('correct', 'i')]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/cong_l.png'), ('pos', -0.3), ('correct', 'e')]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/cong_r.png'), ('pos', -0.3), ('correct', 'i')]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/incong_l.png'), ('pos', -0.3), ('correct', 'e')]),
      OrderedDict([('cue_file', 'ANT_images/none.png'), ('flanker', 'ANT_images/incong_r.png'), ('pos', -0.3), ('correct', 'i')])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
    Routine trial
    Routine post_fixation_2
  LoopTerminator trials_3
  Routine end
